d:Ge/World/HLX = 20 cm
d:Ge/World/HLY = 20 cm
d:Ge/World/HLZ = 100 cm
b:Ge/World/Invisible = "True"
s:Ge/WaterTank/Type     = "TsBox"
s:Ge/WaterTank/Material = "G4_WATER"
s:Ge/WaterTank/Parent   = "World"
d:Ge/WaterTank/HLX      = 29.79 mm
d:Ge/WaterTank/HLY      = 29.79 mm
d:Ge/WaterTank/HLZ      = 165.00 mm
d:Ge/WaterTank/TransX   = -0.00 mm
d:Ge/WaterTank/TransY   = -0.00 mm
d:Ge/WaterTank/TransZ   = 0. mm - Ge/WaterTank/HLZ
d:Ge/WaterTank/RotX     = 0. deg
d:Ge/WaterTank/RotY     = 0. deg
d:Ge/WaterTank/RotZ     = 0. deg

sv:Ph/Default/Modules = 6 "g4em-standard_opt3" "g4h-phy_QGSP_BIC_HP" "g4decay" "g4ion-binarycascade" "g4h-elastic_HP" "g4stopping"

s:So/ProtonBeam/Type                     = "Beam"
s:So/ProtonBeam/Component                = "BeamPosition"
s:So/ProtonBeam/BeamParticle             = "proton"
d:So/ProtonBeam/BeamEnergy               = 20.00 MeV
u:So/ProtonBeam/BeamEnergySpread         = 0.00001
s:So/ProtonBeam/BeamPositionDistribution = "Gaussian"
s:So/ProtonBeam/BeamPositionCutoffShape  = "Ellipse"
d:So/ProtonBeam/BeamPositionCutoffX      = 0.1 cm
d:So/ProtonBeam/BeamPositionCutoffY      = 0.1 cm
d:So/ProtonBeam/BeamPositionSpreadX      = 0.001 cm
d:So/ProtonBeam/BeamPositionSpreadY      = 0.001 cm
s:So/ProtonBeam/BeamAngularDistribution  = "Gaussian"
d:So/ProtonBeam/BeamAngularCutoffX       = 0.1 deg
d:So/ProtonBeam/BeamAngularCutoffY       = 0.1 deg
d:So/ProtonBeam/BeamAngularSpreadX       = 0.000001 rad
d:So/ProtonBeam/BeamAngularSpreadY       = 0.000001 rad
i:So/ProtonBeam/NumberOfHistoriesInRun   = 1000
i:So/ProtonBeam/PreCheckShowParticleCountAtInterval  = 200000

s:Sc/WaterDose/OutputFile = "/storage1/fs1/tiezhizhang/Active/shuangzhou/ct_data/test"
s:Sc/WaterDose/OutputType = "DICOM"
s:Sc/WaterDose/Quantity    = "DoseToMedium"
s:Sc/WaterDose/Component   = "WaterTank"
i:Sc/WaterDose/XBins = 61
i:Sc/WaterDose/YBins = 61
i:Sc/WaterDose/ZBins = 220
b:Sc/WaterDose/OutputToConsole = "False"
s:Sc/WaterDose/IfOutputFileAlreadyExists = "Overwrite"

# s:Gr/ViewA/Type             = "OpenGL"
i:Gr/ViewA/WindowSizeX      = 1024
i:Gr/ViewA/WindowSizeY      = 768
b:Gr/ViewA/IncludeAxes      = "False"
d:Gr/ViewA/AxesSize      	= 0.6 m
d:Gr/ViewA/Theta            = 55 deg
d:Gr/ViewA/Phi              = 20 deg
s:Gr/ViewA/Projection       = "Perspective"
d:Gr/ViewA/PerspectiveAngle = 30 deg
u:Gr/ViewA/Zoom             = 2.
sv:Gr/OnlyIncludeParticlesNamed = 1 "proton"

i:Ts/NumberOfThreads = 8
i:Ts/ShowHistoryCountAtInterval = 100
b:Ts/PauseBeforeQuit = "False"
